PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = priming
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Routines
  Routine trial
    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    TextComponent mask1
      letterHeight = 0.1
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.25
      text = XX
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    TextComponent num_word
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.05
      text = num_word
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    TextComponent mask2
      letterHeight = 0.1
      startVal [time (s)] = 0.55
      stopVal [duration (s)] = 0.25
      text = XX
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    PolygonComponent num_dots
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.25
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.05
      stopVal [duration (s)] = 0.950
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
  LoopTerminator trials
